:start run control:
    ncase = 300000
    geometry error limit=100
:stop run control:

:start media definition:
    AE = 0.512
    UE = 2.011
    AP = 0.001
    UP = 1.500

    material data file = $EGS_HOME/egs_brachy/lib/media/material.dat

:stop media definition:

#------------------------------------------------------------------------------------
:start run mode:
    run mode = normal
:stop run mode:

:start geometry definition:

    :start geometry:

        name = phantom
        library = egs_ndgeometry
        type    = EGS_XYZGeometry

        x-planes = -0.75, -0.25, 0.25, 0.75
        y-planes = -0.75, -0.25, 0.25, 0.75
        z-planes = -0.75, -0.25, 0.25, 0.75

        :start media input:
            media = WATER_0.998
        :stop media input:

    :stop geometry:

    :start geometry:
        library = egs_glib
        name = seed
        include file = $EGS_HOME/egs_brachy/eb_tests/test_geoms/6702/6702.geom
    :stop geometry

    :start geometry:

        library = egs_autoenvelope
        name = phantom_w_source
        base geometry = phantom

        :start inscribed geometry:

            inscribed geometry name = seed

            :start transformations:
                include file = $EGS_HOME/egs_brachy/eb_tests/phsp_run/transforms
            :stop transformations:

            :start region discovery:

                density of random points (cm^-3) = 1E6

                include file = $EGS_HOME/egs_brachy/eb_tests/test_geoms/6702/boundary.shape

            :stop region discovery:

        :stop inscribed geometry:

    :stop geometry:


    # tell egs_brachy which is the seed geometry
    source geometries = seed

    # tell egs_brachy which geometries are phantoms
    phantom geometries = phantom

    simulation geometry = phantom_w_source

:stop geometry definition:

:start source definition:

    :start source:

        library = eb_iaeaphsp_source
        name = 6702
        header file = eb_tests/phsp_run/phsp_run_gen.phsp.IAEAheader

    :stop source:

    :start transformations:
        include file = $EGS_HOME/egs_brachy/eb_tests/phsp_run/transforms
    :stop transformations:

    simulation source = 6702

:stop source definition:

:start scoring options:

    output voxel info files = no
    score energy deposition = no
    muen file = $EGS_HOME/egs_brachy/lib/muen/brachy2026_1500keV.muendat
    muen for media = WATER_0.998

:stop scoring options:

:start variance reduction:
    :start particle recycling:
        times to reuse recycled particles = 20
        rotate recycled particles = yes
    :stop particle recycling:
:stop variance reduction:

#------------------------------------------------------------------------------------
# Transport parameters
include file = $EGS_HOME/egs_brachy/lib/transport/low_energy_default
