:start run control:
    ncase = 4000000
    geometry error limit=100
:stop run control:

:start media definition:
    AE = 0.512
    UE = 2.011
    AP = 0.001
    UP = 1.500

    material data file = $EGS_HOME/egs_brachy/lib/media/material.dat

:stop media definition:

#------------------------------------------------------------------------------------
:start run mode:
    run mode = normal
    single generator = no
:stop run mode:

:start geometry definition:

    :start geometry:

        name = phantom
        library = egs_ndgeometry
        type    = EGS_XYZGeometry

        x-planes = -0.75, -0.25, 0.25, 0.75
        y-planes = -0.75, -0.25, 0.25, 0.75
        z-planes = -0.75, -0.25, 0.25, 0.75

        :start media input:
            media = WATER_0.998
        :stop media input:

    :stop geometry:

    # create our seed geometry from a definition in an
    # external file using the glib shim
    :start geometry:
        library = egs_glib
        name = seed
        include file = $EGS_HOME/egs_brachy/eb_tests/test_geoms/6702/6702.geom
    :stop geometry

    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed0
        :start transformation:
            translation = -0.5, -0.5, -0.5
        :stop transformation:
    :stop geometry:

    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed1
        :start transformation:
            translation = -0.5,  0.5, -0.5
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed2
        :start transformation:
            translation = 0.5, -0.5, -0.5
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed

        name = seed3
        :start transformation:
            translation = 0.5,  0.5, -0.5
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed4
        :start transformation:
            translation = -0.5, -0.5,  0.0
            rotation = 1.57079632679 1.57079632679
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed5
        :start transformation:
            translation = -0.5,  0.5,  0.0
            rotation = 1.57079632679 1.57079632679
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed6
        :start transformation:
            translation = 0.5, -0.5,  0.0
            rotation = 1.57079632679 1.57079632679
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed7
        :start transformation:
            translation = 0.5,  0.5,  0.0
            rotation = 1.57079632679 1.57079632679
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed8
        :start transformation:
            translation = -0.5, -0.5,  0.5
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed9
        :start transformation:
            translation = -0.5,  0.5,  0.5
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed10
        :start transformation:
            translation = 0.5, -0.5,  0.5
        :stop transformation:
    :stop geometry:
    :start geometry:
        library = egs_gtransformed
        my geometry = seed
        name = seed11
        :start transformation:
            translation = 0.5,  0.5,  0.5
        :stop transformation:
    :stop geometry:

    :start geometry:

        library = egs_genvelope
        name = phantom_w_source
        base geometry = phantom
        inscribed geometries= seed0 seed1 seed2 seed3 seed4 seed5 seed6 seed7 seed8 seed9 seed10 seed11

    :stop geometry:


    # tell egs_brachy which is the seed geometry
    source geometries = seed1 seed0 seed2 seed3 seed4 seed5 seed6 seed7 seed8 seed9 seed10 seed11

    # tell egs_brachy which geometries are phantoms
    phantom geometries = phantom

    simulation geometry = phantom_w_source

:stop geometry definition:

:start volume correction:

    :start source volume correction:
        correction type = correct # correct, none, zero dose
        density of random points (cm^-3) = 1E7
        include file = $EGS_HOME/egs_brachy/eb_tests/test_geoms/6702/boundary.shape
    :stop source volume correction:

:stop volume correction:

:start source definition:

    :start source:

        library = egs_isotropic_source
        name = 6702_spheres
        charge = 0

        include file = $EGS_HOME/egs_brachy/eb_tests/test_geoms/6702/6702.shape

        :start spectrum:
            type = tabulated spectrum
            spectrum file = $EGS_HOME/egs_brachy/lib/spectra/I125_TG43.spectrum
        :stop spectrum:

    :stop source:

    :start transformations :
        include file = $EGS_HOME/egs_brachy/eb_tests/seeds_in_xyz/transforms
    :stop transformations:

    simulation source = 6702_spheres

:stop source definition:

:start scoring options:

    output voxel info files = no
    score energy deposition = yes
    muen file = $EGS_HOME/egs_brachy/lib/muen/brachy2026_1500keV.muendat
    muen for media = WATER_0.998

:stop scoring options:

#------------------------------------------------------------------------------------
# Transport parameters
include file = $EGS_HOME/egs_brachy/lib/transport/low_energy_default

:start rng definition:
    type = ranmar
    initial seeds = 28 29
:stop rng definition:
