:start run control:
    ncase = 500000
    geometry error limit=100
:stop run control:

:start media definition:
    AE = 0.512
    UE = 2.011
    AP = 0.001
    UP = 1.500

    material data file = $EGS_HOME/egs_brachy/lib/media/material.dat

:stop media definition:

#------------------------------------------------------------------------------------
:start run mode:
    run mode = superposition
:stop run mode:

:start geometry definition:

    :start geometry:

        name = phantom
        library = egs_ndgeometry
        type    = EGS_XYZGeometry

        x-planes = -1.1, -0.9, -0.7, -0.5, -0.3, -0.1, 0.1, 0.3, 0.5, 0.7, 0.9, 1.1
        y-planes = -1.1, -0.9, -0.7, -0.5, -0.3, -0.1, 0.1, 0.3, 0.5, 0.7, 0.9, 1.1
        z-planes = -1.1, -0.9, -0.7, -0.5, -0.3, -0.1, 0.1, 0.3, 0.5, 0.7, 0.9, 1.1

        :start media input:
            media = WATER_0.998
        :stop media input:

    :stop geometry:

    # create our seed geometry from a definition in an
    # external file using the glib shim
    :start geometry:
        library = egs_glib
        name = seed
        include file = $EGS_HOME/egs_brachy/eb_tests/test_geoms/6702/6702.geom
    :stop geometry

    :start geometry:

        library = egs_autoenvelope
        type = EGS_ASwitchedEnvelope
        name = phantom_w_source
        base geometry = phantom

        :start inscribed geometry:

            inscribed geometry name = seed

            :start transformations:
                :start transformation:
                    translation = 0.2 0 0
                :stop transformation:
                :start transformation:
                    translation = 0 0 0
                :stop transformation:
                :start transformation:
                    translation = -0.2 0 0
                :stop transformation:
            :stop transformations:

            :start region discovery:

                density of random points (cm^-3) = 1E6

                include file = $EGS_HOME/egs_brachy/eb_tests/test_geoms/6702/boundary.shape

            :stop region discovery:

        :stop inscribed geometry:

    :stop geometry:

    # tell egs_brachy which is the seed geometry
    source geometries = seed

    # tell egs_brachy which geometries are phantoms
    phantom geometries = phantom

    simulation geometry = phantom_w_source

    source envelope geometry = phantom_w_source

:stop geometry definition:

:start volume correction:

    :start source volume correction:
        correction type = correct # correct, none, zero dose
        density of random points (cm^-3) = 1E8
        include file = $EGS_HOME/egs_brachy/eb_tests/test_geoms/6702/boundary.shape
    :stop source volume correction:

:stop volume correction:

:start source definition:

    :start source:

        library = egs_isotropic_source
        name = 6702_spheres
        charge = 0

        include file = $EGS_HOME/egs_brachy/eb_tests/test_geoms/6702/6702.shape

        :start spectrum:
            type = tabulated spectrum
            spectrum file = $EGS_HOME/egs_brachy/lib/spectra/I125_TG43.spectrum
        :stop spectrum:

    :stop source:

    :start transformations :
        :start transformation:
            translation = 0.2 0 0
        :stop transformation:
        :start transformation:
            translation = 0 0 0
        :stop transformation:
        :start transformation:
            translation = -0.2 0 0
        :stop transformation:
    :stop transformations:

    simulation source = 6702_spheres

:stop source definition:

:start scoring options:

    output voxel info files = no
    score energy deposition = no
    muen file = $EGS_HOME/egs_brachy/lib/muen/brachy2026_1500keV.muendat
    muen for media = WATER_0.998

:stop scoring options:

:start variance reduction:
    :start particle recycling:
        times to reuse recycled particles = 20
        rotate recycled particles = yes
    :stop particle recycling:
:stop variance reduction:

#------------------------------------------------------------------------------------
# Transport parameters
include file = $EGS_HOME/egs_brachy/lib/transport/low_energy_default
