##############################################################################
#
#  Sample input for a 16 mm COMS eye plaque fully loaded with I125-6711 seeds
#  in the distributed COMSphant scoring phantom.
#
#  Derived from COMS16mm-I125-6711-hetero.egsinp to illustrate the split-
#  transform workflow:
#
#    1. Local seed placements in lib/geometry/transformations/eye_plaques/
#       COMS16mm, referenced for both egs_autoenvelope inscriptions and
#       :start transformations: in the source definition.
#    2. A shared applicator pose in lib/geometry/transformations/eye_plaques/
#       COMS16mm_example_pose, applied through an outer egs_gtransformed
#       wrapper around the autoenvelope assembly and through
#       :start source coordinate transform: in the source definition.
#
#  The inner plaque_transform geometry matches the original template (needed
#  for region discovery with the distributed COMS16mm transform set). The
#  outer egs_gtransformed block and source coordinate transform carry the
#  same additional pose so that source locations stay consistent with the
#  inscribed seed geometry.
#
##############################################################################

#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#

:start run control:
    ncase = 1e6
    geometry error limit=2000
    run mode = normal
	 nbatch = 1
    nchunk = 20
:stop run control:

#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#


:start media definition:
    material data file = $EGS_HOME/egs_brachy/lib/media/material.dat
:stop media definition:

:start run mode:
    run mode = normal
:stop run mode:

#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
#	Definition of geometries	#
#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
:start geometry definition:

#A water box for scatter conditions
	:start geometry:
        library = egs_glib
        name = water_box
        include file = $EGS_HOME/egs_brachy/lib/geometry/phantoms/30cmx30cmx30cm_box_xyz_water.geom
	:stop geometry:
	
#The scoring phantom
	:start geometry:
        library = egs_glib
        name = water_phantom
		include file = $EGS_HOME/egs_brachy/lib/geometry/phantoms/COMSphant.geom
	:stop geometry:

#The plaque to be used
    :start geometry:
        library = egs_glib
        name = empty_plaque
        include file = $EGS_HOME/egs_brachy/lib/geometry/eye_plaques/COMS/COMS16mm/COMS16mm.geom
    :stop geometry
	
    :start geometry:
        library = egs_gtransformed
        my geometry = empty_plaque
        :start transformation:
            translation = 0 0 1.13
        :stop transformation:
        name = plaque_transform
    :stop geometry:

#The brachytherapy seed to be used
	:start geometry:
        library = egs_glib
        name = seed
        include file = $EGS_HOME/egs_brachy/lib/geometry/sources/I125_LDR/OncoSeed_6711/OncoSeed_6711.geom
    :stop geometry
	
# Local seed placements (same file as source definition below)
  :start geometry:

        library = egs_autoenvelope
        name = plaque_w_seeds
        base geometry = plaque_transform

        :start inscribed geometry:

            inscribed geometry name = seed

            :start transformations:
                include file = $EGS_HOME/egs_brachy/lib/geometry/transformations/eye_plaques/COMS16mm
            :stop transformations:

			:start region discovery:
				correction type = discover
                density of random points (cm^-3) = 1E7
                include file =  $EGS_HOME/egs_brachy/lib/geometry/sources/I125_LDR/OncoSeed_6711/boundary.shape
            :stop region discovery:

        :stop inscribed geometry:

    :stop geometry:

# Shared applicator pose (must match source coordinate transform below)
    :start geometry:
        library = egs_gtransformed
        my geometry = plaque_w_seeds
        :start transformation:
            include file = $EGS_HOME/egs_brachy/lib/geometry/transformations/eye_plaques/COMS16mm_example_pose
        :stop transformation:
        name = plaque_in_phantom
    :stop geometry:
	
	:start geometry:
		name = phantom_in_box
		library = egs_genvelope
		base geometry = water_box
		inscribed geometries = water_phantom
	:stop geometry:
	
	:start geometry:
		name = final
		library = egs_genvelope
		base geometry = phantom_in_box
		inscribed geometries = plaque_in_phantom
	:stop geometry:

#Tell egs_brachy which is the source (seed) geometry
    source geometries = seed

#Tell egs_brachy which is the phantom geometry
    phantom geometries = water_phantom

#Tell egs_brachy which geometry to use for the simulation
    simulation geometry = final
	
:stop geometry definition:

#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
#		Volume corrections		#
#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
:start volume correction:

    :start extra volume correction:

        correction type = none # zero dose # correct, none, zero dose
        density of random points (cm^-3) = 1E9

        :start shape:
			type = cylinder
			radius = 0.9
			midpoint = 0, 0, 0
			height = 2.0
        :stop shape:

    :stop extra volume correction:

:stop volume correction:

#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
#	  Definition of sources	    #
#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
:start source definition:

    :start source:

        library = egs_isotropic_source
        name = 6711
        charge = 0

        include file = $EGS_HOME/egs_brachy/lib/geometry/sources/I125_LDR/OncoSeed_6711/OncoSeed_6711.shape

        :start spectrum:
            type = tabulated spectrum
            spectrum file = $EGS_HOME/egs_brachy/lib/spectra/I125_NCRP_line.spectrum 
        :stop spectrum:

    :stop source:

# Local seed placements (same file as geometry inscriptions above)
    :start transformations :
        include file = $EGS_HOME/egs_brachy/lib/geometry/transformations/eye_plaques/COMS16mm
    :stop transformations:

# Shared applicator pose (must match egs_gtransformed above)
    :start source coordinate transform:
        :start transformation:
            include file = $EGS_HOME/egs_brachy/lib/geometry/transformations/eye_plaques/COMS16mm_example_pose
        :stop transformation:
    :stop source coordinate transform:

    simulation source = 6711

:stop source definition:

#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
#		Scoring options			#
#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
:start scoring options:

     #score energy deposition = yes
     output voxel info files  = yes

    muen file = $EGS_HOME/egs_brachy/lib/muen/brachy2026_1500keV.muendat
    muen for media = WATER_0.998
    dose scaling factor = 1.00 # For absolute dose # 
	# scaling factor for  dose/sk for I-6711= 2.699551E+11 , Pd103-200= from CLRP_Epv2 paper  ,  Cs131-Isoray=  From CLRP_EPv2 paper Medphys 2021     . Sk is from the CLRPv2 TG43 database 
:stop scoring options:

#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
#   	Transport parameters	#
#~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~#
include file =  $EGS_HOME/egs_brachy/lib/transport/low_energy_default

:start rng definition:
    type = ranmar
    initial seeds = 68 97
:stop rng definition:
