## -40cm <= X, Y, Z <= 40cm
## 0.01cm voxels for -1.015 <= X, Z <= 1.015cm, and a
## 0.01cm voxel from -0.005cm <= Y <= 0.005cm

:start geometry definition:

    :start geometry:

        name = xyz_80cmx80cmx80cm_203x0.1mm
        library = egs_ndgeometry
        type    = EGS_XYZGeometry

        x-planes = -40, -1.015, -1.005, -0.995, -0.985, -0.975, -0.965, -0.955, -0.945, -0.935, -0.925, -0.915, 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40
        y-planes = -40, -0.005, 0.005, 40
        z-planes = -40, -1.015, -1.005, -0.995, -0.985, -0.975, -0.965, -0.955, -0.945, -0.935, -0.925, -0.915, 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40

        :start media input:
            media = WATER_0.998
        :stop media input:

    :stop geometry:

    simulation geometry = xyz_80cmx80cmx80cm_203x0.1mm

:stop geometry definition:
