# seed name: Ir192- CIS_Bio_Intenational_0.5cmDia_1cm_long
# air kerma: 1.17421E-13

#  Copyright (C) 2020, Rowan M Thomson and D.W.O. Rogers
#
# This file is part of the egs_brachy package to be used with EGSnrc
#
#  egs_brachy is free software: you can redistribute it and/or modify it
#  under the terms of the GNU Affero General Public License as published
#  by the Free Software Foundation, either version 3 of the License, or
#  (at your option) any later version.
#
#  egs_brachy is distributed in the hope that it will be useful, but
#  WITHOUT ANY WARRANTY; without even the implied warranty of
#  MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the GNU
#  Affero General Public License for more details:
#  <http://www.gnu.org/licenses/>.
#
# If you use this file, please cite
#       M Chamberland, R E P Taylor, D W O Rogers and R M Thomson
#       egs_brachy: a versatile and fast Monte Carlo code for brachytherapy
#       Phys Med Biol 61(2016) 8214 -- 8231
# and
#       Habib Safigholi, Marc J.P. Chamberland, Randle E.P. Taylor, Martin P. Martinov,
#       D. W. O. Rogers and Rowan M. Thomson,  Update of the CLRP Monte Carlo TG-43
#       parameter database for high-energy brachytherapy sources, Med. Phys. 50 (2023)
#       1928-1941
#
#

:start geometry definition:

    :start geometry:
        name = the_seed
        library = egs_rz
        radii = 0.015 0.025
        z-planes = -0.5 0.5
        :start media input:
           media = Pt75Ir25 Pt
           set medium = 0 0
           set medium = 1 1
        :stop media input:
    :stop geometry:

    simulation geometry = the_seed

:stop geometry definition:
